PsychoPy2experiment version="3.0.1"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 720]
  color = $[1.000,1.000,1.000]
  expName = HaririTask_Ver2
  logging level = debug
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Routines
  Routine trial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        gcfacetrialstarttime = gregsclock.getTime()
        gregstrialclock = core.Clock()
        GCFaceTimeLoggerCheck = 0
        GCPostFaceFixationLoggerCheck = 0
    CodeComponent code_3
      Code Type = Py
      Each Frame:
        if TopImage.status == STARTED and GCFaceTimeLoggerCheck == 0:
            gcfacestarttime = gregsclock.getTime()
            GCFaceTimeLoggerCheck = 1
    ImageComponent TopImage
      image [set every repeat] = $Top
      pos = (0, 0.5)
      size = (0.35, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
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    ImageComponent LeftFrame
      image [set every repeat] = $EmptyFrame
      pos = (-0.5, -0.5)
      size = (0.38, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
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    ImageComponent LeftImage
      image [set every repeat] = $Left
      pos = (-0.5, -0.5)
      size = (0.35, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
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    ImageComponent RightFrame
      image [set every repeat] = $EmptyFrame
      pos = (0.5, -0.5)
      size = (0.38, 0.78)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
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    ImageComponent RightImage
      image [set every repeat] = $Right
      pos = (0.5, -0.5)
      size = (0.35, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
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    KeyboardComponent key_resp_trial
      allowedKeys = '1','2'
      correctAns = $Correct
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TrialLength
      store = first key
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      Each Frame:
        if key_resp_trial.keys == '1':
            LeftFrame.setImage(os.path.join(_thisDir,SelectedFrame))
            LeftImage.setImage(os.path.join(_thisDir,Left))
        if key_resp_trial.keys == '2':
            RightFrame.setImage(os.path.join(_thisDir,SelectedFrame))
            RightImage.setImage(os.path.join(_thisDir,Right))
        if TrialFixationEnd.status == STARTED and GCPostFaceFixationLoggerCheck == 0:
            gcpostfacefixationstarttime = gregsclock.getTime()
            GCPostFaceFixationLoggerCheck = 1
    ImageComponent TrialFixationEnd
      image = C:\Users\local.BME\Desktop\HaririTask\stimuli\Fixation.bmp
      size = (0.85, 1)
      startVal [time (s)] = $TrialLength
      stopVal [duration (s)] = $FixationLength
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    CodeComponent code_5
      Code Type = Py
      End Routine:
        gcpostfacefixationendtime = gregsclock.getTime()
        trials.addData('GCFaceStartTime',gcfacestarttime)
        trials.addData('GCPostFaceFixationStartTime',gcpostfacefixationstarttime)
        trials.addData('GCPostFaceFixationEndTime',gcpostfacefixationendtime)
        if key_resp_trial.keys != None:  # we had a response
            trials.addData('key_resp_trial.rt', key_resp_trial.rt)
  Routine PleaseWait
    TextComponent PleaseWaitText
      color = black
      letterHeight = 0.15
      startVal [time (s)] = 0.0
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      text:
        Please wait...

        Task will begin shortly.
    KeyboardComponent key_resp_starttask
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BeginningFixation
    CodeComponent code
      Code Type = Py
      Begin Routine:
        gregsclock = core.Clock()
        gcbeginningfixationstarttime = gregsclock.getTime()
      End Routine:
        gcbeginningfixationendtime = gregsclock.getTime()
        thisExp.addData('GCBeginningFixationStartTime',gcbeginningfixationstarttime)
        thisExp.addData('GCBeginningFixationEndTime',gcbeginningfixationendtime)
    ImageComponent BeginningFixationCross
      image = C:\Users\local.BME\Desktop\HaririTask\stimuli\Fixation.bmp
      size = (0.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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  Routine EndingFixation
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        gcendingfixationstarttime = gregsclock.getTime()
    ImageComponent EndingFixationCross
      image = C:\Users\local.BME\Desktop\HaririTask\stimuli\Fixation.bmp
      size = (0.85, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    CodeComponent code_6
      Code Type = Py
      End Routine:
        gcendingfixationendtime = gregsclock.getTime()
        thisExp.addData('GCEndingFixationStartTime',gcendingfixationstarttime)
        thisExp.addData('GCEndingFixationEndTime',gcendingfixationendtime)
Flow
  Routine PleaseWait
  Routine BeginningFixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ..\HaririTask\HaririTrials_Ver2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrialType', 'MatchEmotion'), ('Top', 'stimuli/MatchEmotion.bmp'), ('Left', 'stimuli/EmptyFace.bmp'), ('Right', 'stimuli/EmptyFace.bmp'), ('EmptyFrame', 'stimuli/EmptyFrame.bmp'), ('SelectedFrame', 'stimuli/EmptyFrame.bmp'), ('Correct', 'Null'), ('Emotion', None), ('Gender', None), ('TrialLength', 3), ('FixationLength', 1)]),
      OrderedDict([('TrialType', 'Fear'), ('Top', 'stimuli/23M_FE_O.BMP'), ('Left', 'stimuli/23M_FE_O.BMP'), ('Right', 'stimuli/24M_FE_O.BMP'), ('EmptyFrame', 'stimuli/EmptyFrame.bmp'), ('SelectedFrame', 'stimuli/RedFrame.bmp'), ('Correct', '1'), ('Emotion', 'Fear'), ('Gender', 'Male'), ('TrialLength', 3), ('FixationLength', 1)]),
      OrderedDict([('TrialType', 'Fear'), ('Top', 'stimuli/19F_FE_O.BMP'), ('Left', 'stimuli/18F_FE_O.BMP'), ('Right', 'stimuli/19F_FE_O.BMP'), ('EmptyFrame', 'stimuli/EmptyFrame.bmp'), ('SelectedFrame', 'stimuli/RedFrame.bmp'), ('Correct', '2'), ('Emotion', 'Fear'), ('Gender', 'Female'), ('TrialLength', 3), ('FixationLength', 1)]),
      OrderedDict([('TrialType', 'Fear'), ('Top', 'stimuli/17F_FE_O.BMP'), ('Left', 'stimuli/17F_FE_O.BMP'), ('Right', 'stimuli/16F_FE_O.BMP'), ('EmptyFrame', 'stimuli/EmptyFrame.bmp'), ('SelectedFrame', 'stimuli/RedFrame.bmp'), ('Correct', '1'), ('Emotion', 'Fear'), ('Gender', 'Female'), ('TrialLength', 3), ('FixationLength', 1)])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
    Routine trial
  LoopTerminator trials
  Routine EndingFixation
